OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
-> Signal Power Log
-> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter => #4
  Spatial Filter Coefficients = 1;1;1;1;1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 8
  Filter matrix file =
Data=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 150
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#4 -> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/baseline.py

Lua Stimulator
  Lua Script = ${Player_ScenarioDirectory}/baseline.lua
  Baseline_Duration = 30
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
