OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
Settings
  mean_baseline = 11.7
  subject_ID = 0
  event = handitech
  std_baseline = 4.7

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
-> Channel Selector "1:3" => #2
  Channel List = 1:3
  Action = Select
  Channel Matching Method = Smart
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#0.Signal stream -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/bin/online_$var{subject_ID}_$var{event}-[$core{date}-$core{time}].gdf
#0.Signal stream -> Temporal Filter => #5
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
Data=#5 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#5 -> Signal Power Log
-> Channel Selector "1:3"
  Channel List = 1:3
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter => #9
  Spatial Filter Coefficients = 1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 3
  Filter matrix file =
Data=#9 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 150
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#9 -> Simple DSP => #11
  Equation = ((a-$var{mean_baseline})/($var{mean_baseline}))*13
Input signal=#11 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = EEG
Data=#11 -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 150
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#11 -> Threshold Crossing Detector
  Threshold = 2
  Cross over threshold = OVTK_StimulationId_Label_00
  Cross under threshold = OVTK_StimulationId_Label_01
  Channel Index = 1
-> 0x341d3912 Stimulation listener
  Log level to use = Information
Input signal=#11 -> 0x341d3912 LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers

Python 3 scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/dtrocell/Documents/brain_kart/OpenVibe/save_csv.py
  path = ${Player_ScenarioDirectory}/bin
  pseudo = $var{subject_ID}
  event = $var{event}
