OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> 0x341d3912 Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 30
  High Cut-off Frequency (Hz) = 49
-> 0x341d3912 Signal Power Log => #2
#0.Signal stream -> 0x341d3912 Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
-> 0x341d3912 Signal Power Log => #4
#0.Signal stream -> 0x341d3912 Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 14
  High Cut-off Frequency (Hz) = 30
-> 0x341d3912 Signal Power Log => #6
Input - A=#4, a/b=#6 -> 0x341d3912 Simple DSP
  Equation = a/b
#0.Signal stream -> 0x341d3912 Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 7
-> 0x341d3912 Signal Power Log => #9
alpha=#4, beta=#6, theta=#9, gamma=#2 -> 0x341d3912 Simple DSP
  Equation = (b/c+a)/d
-> 0x341d3912 Channel Selector "1:3"
  Channel List = 1:3
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 Spatial Filter => #12
  Spatial Filter Coefficients = 1;1;1;1;1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 8
  Filter matrix file =
-> 0x341d3912 Level measure
Data=#12 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 150
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#12 -> 0x341d3912 Threshold Crossing Detector
  Threshold = 80
  Cross over threshold = OVTK_StimulationId_Label_00
  Cross under threshold = OVTK_StimulationId_Label_01
  Channel Index = 1
-> 0x341d3912 Stimulation listener
  Log level to use = Information
#0.Signal stream -> Temporal Filter => #17
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
-> 0x341d3912 Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> 0x341d3912 Epoch average
  Averaging type = Moving epoch average
  Epoch count = 10
Data=#17 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#17 -> Signal Power Log
-> Channel Selector "1:3"
  Channel List = 1:3
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter => #23
  Spatial Filter Coefficients = 1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 3
  Filter matrix file =
Data=#23 -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 150
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#23 -> Level measure
#23 -> Threshold Crossing Detector
  Threshold = 80
  Cross over threshold = OVTK_StimulationId_Label_00
  Cross under threshold = OVTK_StimulationId_Label_01
  Channel Index = 1
-> Stimulation listener
  Log level to use = Information
